PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'task': 'Experiment'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = PackagingExperiment
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
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Routines
  Routine calib_cont
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        timeout = 10
        ave_error = 0.0
        valid_calib_points = 0
      Begin Routine:
        if calibration is not None:
            print(calibration.last)
            ave_error = calibration.last['SUMMARY']['AVE_ERROR']
            valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\nValid points: %d\n\nRecalibrate (y/n)?" % (ave_error,valid_calib_points)
      End Routine:
        #calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine calib_instr
    TextComponent calib_instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        We must first calibrate the eye tracker.

        Keep your eye on the calibration dot but don't anticipate it's movement.

        Press space to continue.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    CodeComponent imageSelector
      Code Type = Py
      Begin Experiment:
        import random
        Healthy_food = ['stimuli/banana_chips.png', 'stimuli/fruit_cup.png', 'stimuli/clementines.png', 'stimuli/health_bar.png']
        Unhealthy_food = ['stimuli/nacho_chips.png','stimuli/lays_chips.png', 'stimuli/chocolate_bar.png', 'stimuli/chocolate_cookies.png']
        Random_image = ['stimuli/distractions/watch.png', 'stimuli/distractions/cart.png', 'stimuli/distractions/scissors.png', 'stimuli/distractions/basketball.png']
        random.seed()
      Begin Routine:
        Healthy_index = random.randrange(4)
        Unhealthy_index = random.randrange(4)
        Random_index = random.randrange(4)

        images = [Healthy_food[Healthy_index], Unhealthy_food[Healthy_index], Random_image[Random_index]]
        random.shuffle(images)
    ImageComponent TopLeft
      image [set every repeat] = $images[0]
      pos = (-.33, -.5)
      size [set every repeat] = (0.28125, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    ImageComponent TopRight
      image [set every repeat] = $images[1]
      pos = (.33, -.5)
      size [set every repeat] = (0.28125, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    ImageComponent Bottom
      image [set every repeat] = $images[2]
      pos = (0, .5)
      size [set every repeat] = (0.28125, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    EyetrackerRecordComponent trial_eyetracker
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.
    targetLayout = FIVE_POINTS
    units = from exp settings
  Routine trial_instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        <insert instructions here>

        Press spacebar to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
  Routine trial_instr
  LoopInitiator stimulus_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine stimulus
  LoopTerminator stimulus_loop
